---
API: 2.1
OpenSesame: 3.2.8
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Wisconsin Card Sorting Test"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set osf_id 5d7ceb95710c95001f58b178
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/mara/Google Drive (a.m.van.der.ploeg@rug.nl)/ViTAAL op Leeftijd __ Werving/testen/Testmateriaal"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background gray

define notepad README
	__note__
	This is an implementation of the modified Wisconsic Card Sorting Test (mWCST).
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if "[sequence_correct] == 6"
	setcycle 0 color1 blue
	setcycle 0 color2 red
	setcycle 0 color3 yellow
	setcycle 0 color4 green
	setcycle 0 number1 4
	setcycle 0 number2 1
	setcycle 0 number3 3
	setcycle 0 number4 2
	setcycle 0 shape1 circle
	setcycle 0 shape2 triangle
	setcycle 0 shape3 cross
	setcycle 0 shape4 star
	setcycle 0 response_color blue
	setcycle 0 response_shape cross
	setcycle 0 response_number 1
	setcycle 1 color1 blue
	setcycle 1 color2 red
	setcycle 1 color3 yellow
	setcycle 1 color4 green
	setcycle 1 number1 4
	setcycle 1 number2 1
	setcycle 1 number3 3
	setcycle 1 number4 2
	setcycle 1 shape1 circle
	setcycle 1 shape2 triangle
	setcycle 1 shape3 cross
	setcycle 1 shape4 star
	setcycle 1 response_color blue
	setcycle 1 response_shape cross
	setcycle 1 response_number 1
	setcycle 2 color1 blue
	setcycle 2 color2 red
	setcycle 2 color3 yellow
	setcycle 2 color4 green
	setcycle 2 number1 4
	setcycle 2 number2 1
	setcycle 2 number3 3
	setcycle 2 number4 2
	setcycle 2 shape1 circle
	setcycle 2 shape2 triangle
	setcycle 2 shape3 cross
	setcycle 2 shape4 star
	setcycle 2 response_color blue
	setcycle 2 response_shape cross
	setcycle 2 response_number 2
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	setcycle 4 color1 blue
	setcycle 4 color2 red
	setcycle 4 color3 yellow
	setcycle 4 color4 green
	setcycle 4 number1 4
	setcycle 4 number2 1
	setcycle 4 number3 3
	setcycle 4 number4 2
	setcycle 4 shape1 circle
	setcycle 4 shape2 triangle
	setcycle 4 shape3 cross
	setcycle 4 shape4 star
	setcycle 4 response_color blue
	setcycle 4 response_shape star
	setcycle 4 response_number 1
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	setcycle 6 color1 blue
	setcycle 6 color2 red
	setcycle 6 color3 yellow
	setcycle 6 color4 green
	setcycle 6 number1 4
	setcycle 6 number2 1
	setcycle 6 number3 3
	setcycle 6 number4 2
	setcycle 6 shape1 circle
	setcycle 6 shape2 triangle
	setcycle 6 shape3 cross
	setcycle 6 shape4 star
	setcycle 6 response_color blue
	setcycle 6 response_shape star
	setcycle 6 response_number 3
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	setcycle 12 color1 blue
	setcycle 12 color2 red
	setcycle 12 color3 yellow
	setcycle 12 color4 green
	setcycle 12 number1 4
	setcycle 12 number2 1
	setcycle 12 number3 3
	setcycle 12 number4 2
	setcycle 12 shape1 circle
	setcycle 12 shape2 triangle
	setcycle 12 shape3 cross
	setcycle 12 shape4 star
	setcycle 12 response_color red
	setcycle 12 response_shape cross
	setcycle 12 response_number 2
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	setcycle 14 color1 blue
	setcycle 14 color2 red
	setcycle 14 color3 yellow
	setcycle 14 color4 green
	setcycle 14 number1 4
	setcycle 14 number2 1
	setcycle 14 number3 3
	setcycle 14 number4 2
	setcycle 14 shape1 circle
	setcycle 14 shape2 triangle
	setcycle 14 shape3 cross
	setcycle 14 shape4 star
	setcycle 14 response_color red
	setcycle 14 response_shape cross
	setcycle 14 response_number 4
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	setcycle 16 color1 blue
	setcycle 16 color2 red
	setcycle 16 color3 yellow
	setcycle 16 color4 green
	setcycle 16 number1 4
	setcycle 16 number2 1
	setcycle 16 number3 3
	setcycle 16 number4 2
	setcycle 16 shape1 circle
	setcycle 16 shape2 triangle
	setcycle 16 shape3 cross
	setcycle 16 shape4 star
	setcycle 16 response_color red
	setcycle 16 response_shape circle
	setcycle 16 response_number 2
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	setcycle 24 color1 blue
	setcycle 24 color2 red
	setcycle 24 color3 yellow
	setcycle 24 color4 green
	setcycle 24 number1 4
	setcycle 24 number2 1
	setcycle 24 number3 3
	setcycle 24 number4 2
	setcycle 24 shape1 circle
	setcycle 24 shape2 triangle
	setcycle 24 shape3 cross
	setcycle 24 shape4 star
	setcycle 24 response_color green
	setcycle 24 response_shape triangle
	setcycle 24 response_number 3
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	setcycle 36 color1 blue
	setcycle 36 color2 red
	setcycle 36 color3 yellow
	setcycle 36 color4 green
	setcycle 36 number1 4
	setcycle 36 number2 1
	setcycle 36 number3 3
	setcycle 36 number4 2
	setcycle 36 shape1 circle
	setcycle 36 shape2 triangle
	setcycle 36 shape3 cross
	setcycle 36 shape4 star
	setcycle 36 response_color yellow
	setcycle 36 response_shape star
	setcycle 36 response_number 1
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	run trial_sequence

define sketchpad card_display
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[number1]-[color1]-[shape1].png" scale=0.5 show_if=always x=-384 y=-160 z_index=0
	draw image center=1 file="[number2]-[color2]-[shape2].png" scale=0.5 show_if=always x=-128 y=-160 z_index=0
	draw image center=1 file="[number3]-[color3]-[shape3].png" scale=0.5 show_if=always x=128 y=-160 z_index=0
	draw image center=1 file="[number4]-[color4]-[shape4].png" scale=0.5 show_if=always x=384 y=-160 z_index=0
	draw image center=1 file="[response_number]-[response_color]-[response_shape].png" scale=0.5 show_if=always x=0 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Past bij deze kaart?" x=0 y=64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welke van deze kaarten:" x=0 y=-320 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=F x=-384 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=G x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=H x=128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=J x=384 y=0 z_index=0

define inline_javascript check_correct
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	var IN = function(ls, val){
	    return ls.indexOf(val) != -1;
	}
	
	if (IN(vars.CS, vars.response_press_fghj) || IN(vars.CC, vars.response_press_fghj) || IN(vars.CN, vars.response_press_fghj) || IN(vars.CE1, vars.response_press_fghj) || IN(vars.CE2, vars.response_press_fghj) || IN(vars.CE3, vars.response_press_fghj)){
		vars.correct = 1
	}else vars.correct = 0
	__end__
	set _prepare ""

define sketchpad correct_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=green show_if=always style=default x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run README always
	run participant_id_script always
	run get_participant_ID_loop always
	run verify_participant_ID always
	run init_matching_rule always
	run instructions1 always
	run instructions1_key always
	run block_loop always
	run goodbye always

define inline_javascript fix
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.CE1 = 'empty'
	vars.CE2 = 'empty'
	vars.CE3 = 'empty'
	__end__
	___prepare__
	vars.CS = 'empty'
	vars.CC = 'empty'
	vars.CN = 'empty'
	__end__

define sequence get_participant_ID
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run participant_ID_screen always
	run number_input always
	run process_number_input always
	run new_logger always

define loop get_participant_ID_loop
	set source_file ""
	set source table
	set repeat 200
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[response] = return or [response] = enter"
	setcycle 0 empty_column ""
	run get_participant_ID

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Klaar!<br /><br /><br />Bedankt voor uw deelname!<br /><br /><br />Druk op een toets om het experiment af te sluiten." x=0 y=-32 z_index=0
	draw image center=1 file="1-blue-circle.png" scale=0.25 show_if=always x=-352 y=-256 z_index=0
	draw image center=1 file="2-green-cross.png" scale=0.25 show_if=always x=352 y=-256 z_index=0
	draw image center=1 file="3-red-star.png" scale=0.25 show_if=always x=-352 y=256 z_index=0
	draw image center=1 file="4-yellow-triangle.png" scale=0.25 show_if=always x=352 y=256 z_index=0

define sketchpad incorrect_feedback
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=red show_if=always style=default x=0 y=0 z_index=0

define inline_javascript init_matching_rule
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	function choice(choices) {
	  let index = Math.floor(Math.random() * choices.length)
	  return choices[index]
	}
	
	vars.matching_rule = 'empty'
	vars.CS = 'empty'
	vars.CC = 'empty'
	vars.CN = 'empty'
	vars.CE1 = 'empty'
	vars.CE2 = 'empty'
	vars.CE3 = 'empty'
	vars.overlap1 = 2
	vars.overlap2 = 2
	vars.overlap3 = 2
	vars.overlap4 = 2
	vars.correct_in_a_row = 0
	vars.sequence_correct = 0
	vars.matching_rule1 = ''
	vars.matching_rule2 = ''
	vars.matching_rule3 = ''
	vars.matching_rule4 = ''
	vars.matching_rule5 = ''
	vars.matching_rule6 = ''
	vars.prompt_rule_update = 0
	vars.rule_update = 1
	__end__
	set _prepare ""

define sketchpad instructions1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="U ziet straks vier kaarten bovenin het scherm <br />en één kaart onderin het scherm.<br /><br />Uw taak is om de onderste kaart te sorteren. <br />U doet dit door op één van de toetsen <br />F, G, H of J (in het midden van uw toetsenbord)<br />te drukken, die overeenkomen met <br />de vier kaarten bovenin het scherm.<br /><br />U moet zelf de regels voor het sorteren ontdekken <br />door verschillende manieren <br />van sorteren te proberen. <br /><br />Na elke poging ziet u of <br />de sortering goed was (groen) <br />of fout (rood).<br /><br />Als u nog vragen heeft, mag u die nu stellen.<br />Druk op de 'Enter' toets om te beginnen." x=0 y=0 z_index=0

define keyboard_response instructions1_key
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses return

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define keyboard_response number_input
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;0;return;backspace"

define sketchpad participant_ID_screen
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="U krijgt een deelnemersnummer te horen die u hier mag invullen.<br />Druk op 'Enter' als u het nummer volledig in beeld ziet staan.<br /><br />Nummer: [participant_ID]" x=0 y=0 z_index=0

define inline_javascript participant_id_script
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.participant_ID = ''
	vars.response = ''
	__end__

define keyboard_response press_fghj
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "f;g;h;j"

define inline_javascript process_number_input
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log(vars.response)
	if (vars.response in [0, 1, 2, 3, 4, 5, 6, 7, 8, 9]) {
		vars.participant_ID += vars.response.toString()
	} else if (vars.response === 'backspace') {
		vars.participant_ID = vars.participant_ID.toString().slice(0, vars.participant_ID.toString().length - 1)
	}
	__end__
	set _prepare ""

define sketchpad rule_update
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="De sorteerregel is nu veranderd.<br />Nu moet je een andere sorteerregel vinden.<br /><br />Druk op een toets om door te gaan." x=0 y=0 z_index=0

define inline_javascript set_correct
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	if (vars.matching_rule === 'shape') {
	    if ('circle' === vars.response_shape) vars.CS = 'f'
	    else if ('triangle' === vars.response_shape) vars.CS = 'g'
	    else if ('cross' === vars.response_shape) vars.CS = 'h'
	    else if ('star' === vars.response_shape) vars.CS = 'j'
		}
	if (vars.matching_rule === 'color') {
	    if ('blue' === vars.response_color) vars.CC = 'f'
	    else if ('red' === vars.response_color) vars.CC = 'g'
	    else if ('yellow' === vars.response_color) vars.CC = 'h'
	    else if ('green' === vars.response_color) vars.CC = 'j'
		}
	if (vars.matching_rule === 'number') {
	    if (4 === vars.response_number) vars.CN = 'f'
	    else if (1 === vars.response_number) vars.CN = 'g'
	    else if (3 === vars.response_number) vars.CN = 'h'
	    else if (2 === vars.response_number) vars.CN = 'j'
		}
	__end__

define inline_javascript set_correct_12
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if(vars.sequence_correct === 0){
		if (vars.overlap1 === 0){
			vars.CE1 = 'g'
			vars.CE2 = 'h'
			vars.CE3 = 'j'
		} else if (vars.overlap2 === 0){
			vars.CE1 = 'f'
			vars.CE2 = 'h'
			vars.CE3 = 'j'
		} else if (vars.overlap3 === 0){
			vars.CE1 = 'f'
			vars.CE2 = 'g'
			vars.CE3 = 'j'
		} else if (vars.overlap4 === 0){
			vars.CE1 = 'f'
			vars.CE2 = 'g'
			vars.CE3 = 'h'
		}
	}
	
	if(vars.sequence_correct === 1){
		if (vars.overlap1 === 0){
			if (vars.matching_rule1 === 'shape'){
				if ('triangle' === vars.response_shape){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if ('cross' === vars.response_shape){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if ('star' === vars.response_shape){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				}
			} else if (vars.matching_rule1 === 'color'){
				if ('red' === vars.response_color){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if ('yellow' === vars.response_color){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if ('green' === vars.response_color){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				}
			} else if (vars.matching_rule1 === 'number'){
				if (1 === vars.response_number){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if (3 === vars.response_number){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if (2 === vars.response_number){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				}
			}
		} else if (vars.overlap2 === 0){
			if (vars.matching_rule1 === 'shape'){
				if ('circle' === vars.response_shape){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if ('cross' === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if ('star' === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				}
			} else if (vars.matching_rule1 === 'color'){
				if ('blue' === vars.response_color){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if ('yellow' === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if ('green' === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				}
			} else if (vars.matching_rule1 === 'number'){
				if (4 === vars.response_number){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if (3 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if (2 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				}
			}
		} else if (vars.overlap3 === 0){
			if (vars.matching_rule1 === 'shape'){
				if ('circle' === vars.response_shape){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if ('triangle' === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if ('star' === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			} else if (vars.matching_rule1 === 'color'){
				if ('blue' === vars.response_color){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if ('red' === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if ('green' === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			} else if (vars.matching_rule1 === 'number'){
				if (4 === vars.response_number){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if (1 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if (2 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			}
		} else if (vars.overlap4 === 0){
			if (vars.matching_rule1 === 'shape'){
				if ('circle' === vars.response_shape){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				} else if ('triangle' === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				} else if ('cross' === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			} else if (vars.matching_rule1 === 'color'){
				if ('blue' === vars.response_color){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				} else if ('red' === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				} else if ('yellow' === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			} else if (vars.matching_rule1 === 'number'){
				if (4 === vars.response_number){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				} else if (1 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				} else if (3 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			}
		}
	}
	__end__
	___prepare__
	if(vars.sequence_correct === 0){
		if (vars.overlap1 === 0){
			vars.CE1 = 'g'
			vars.CE2 = 'h'
			vars.CE3 = 'j'
		} else if (vars.overlap2 === 0){
			vars.CE1 = 'f'
			vars.CE2 = 'h'
			vars.CE3 = 'j'
		} else if (vars.overlap3 === 0){
			vars.CE1 = 'f'
			vars.CE2 = 'g'
			vars.CE3 = 'j'
		} else if (vars.overlap4 === 0){
			vars.CE1 = 'f'
			vars.CE2 = 'g'
			vars.CE3 = 'h'
		}
	}
	
	if(vars.sequence_correct === 1){
		if (vars.overlap1 === 0){
			if (vars.matching_rule1 === 'shape'){
				if (vars.shape2 === vars.response_shape){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if (vars.shape3 === vars.response_shape){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if (vars.shape4 === vars.response_shape){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				}
			} else if (vars.matching_rule1 === 'color'){
				if (vars.color2 === vars.response_color){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if (vars.color3 === vars.response_color){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if (vars.color4 === vars.response_color){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				}
			} else if (vars.matching_rule1 === 'number'){
				if (vars.number2 === vars.response_number){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if (vars.number3 === vars.response_number){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if (vars.number4 === vars.response_number){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				}
			}
		} else if (vars.overlap2 === 0){
			if (vars.matching_rule1 === 'shape'){
				if (vars.shape1 === vars.response_shape){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if (vars.shape3 === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if (vars.shape4 === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				}
			} else if (vars.matching_rule1 === 'color'){
				if (vars.color1 === vars.response_color){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if (vars.color3 === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if (vars.color4 === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				}
			} else if (vars.matching_rule1 === 'number'){
				if (vars.number1 === vars.response_number){
					vars.CE1 = 'h'
					vars.CE2 = 'j'
				} else if (vars.number3 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if (vars.number4 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				}
			}
		} else if (vars.overlap3 === 0){
			if (vars.matching_rule1 === 'shape'){
				if (vars.shape1 === vars.response_shape){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if (vars.shape2 === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if (vars.shape4 === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			} else if (vars.matching_rule1 === 'color'){
				if (vars.color1 === vars.response_color){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if (vars.color2 === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if (vars.color4 === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			} else if (vars.matching_rule1 === 'number'){
				if (vars.number1 === vars.response_number){
					vars.CE1 = 'g'
					vars.CE2 = 'j'
				} else if (vars.number2 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'j'
				} else if (vars.number4 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			}
		} else if (vars.overlap4 === 0){
			if (vars.matching_rule1 === 'shape'){
				if (vars.shape1 === vars.response_shape){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				} else if (vars.shape2 === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				} else if (vars.shape3 === vars.response_shape){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			} else if (vars.matching_rule1 === 'color'){
				if (vars.color1 === vars.response_color){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				} else if (vars.color2 === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				} else if (vars.color3 === vars.response_color){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			} else if (vars.matching_rule1 === 'number'){
				if (vars.number1 === vars.response_number){
					vars.CE1 = 'g'
					vars.CE2 = 'h'
				} else if (vars.number2 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'h'
				} else if (vars.number3 === vars.response_number){
					vars.CE1 = 'f'
					vars.CE2 = 'g'
				}
			}
		}
	}
	__end__

define inline_javascript set_matching_rule12
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.sequence_correct === 0){
		if (vars.response_press_fghj ==='f'){
			if ('circle' === vars.response_shape){
			vars.matching_rule = 'shape'
			}else if ('blue' === vars.response_color){
			vars.matching_rule = 'color'
			}else if (4 === vars.response_number){
			vars.matching_rule = 'number'
			}
		}else if (vars.response_press_fghj ==='g'){
			if ('triangle' === vars.response_shape){
			vars.matching_rule = 'shape'
			}else if ('red' === vars.response_color){
			vars.matching_rule = 'color'
			}else if (1 === vars.response_number){
			vars.matching_rule = 'number'
			}
		}else if (vars.response_press_fghj ==='h'){
			if ('cross' === vars.response_shape){
			vars.matching_rule = 'shape'
			}else if ('yellow' === vars.response_color){
			vars.matching_rule = 'color'
			}else if (3 === vars.response_number){
			vars.matching_rule = 'number'
			}
		}else if (vars.response_press_fghj ==='j'){
			if ('star' === vars.response_shape){
			vars.matching_rule = 'shape'
			}else if ('green' === vars.response_color){
			vars.matching_rule = 'color'
			}else if (2 === vars.response_number){
			vars.matching_rule = 'number'
			}
		}
	}
	
	if (vars.sequence_correct === 1){
		if (vars.response_press_fghj ==='f'){
			if ('circle' === vars.response_shape || vars.matching_rule1 != 'shape'){
			vars.matching_rule = 'shape'
			}else if ('blue' === vars.response_color || vars.matching_rule1 != 'color'){
			vars.matching_rule = 'color'
			}else if (4 === vars.response_number || vars.matching_rule1 != 'number'){
			vars.matching_rule = 'number'
			}
		}else if (vars.response_press_fghj ==='g'){
			if ('triangle' === vars.response_shape || vars.matching_rule1 != 'shape'){
			vars.matching_rule = 'shape'
			}else if ('red' === vars.response_color || vars.matching_rule1 != 'color'){
			vars.matching_rule = 'color'
			}else if (1 === vars.response_number || vars.matching_rule1 != 'number'){
			vars.matching_rule = 'number'
			}
		}else if (vars.response_press_fghj ==='h'){
			if ('cross' === vars.response_shape || vars.matching_rule1 != 'shape'){
			vars.matching_rule = 'shape'
			}else if ('yellow' === vars.response_color || vars.matching_rule1 != 'color'){
			vars.matching_rule = 'color'
			}else if (3 === vars.response_number || vars.matching_rule1 != 'number'){
			vars.matching_rule = 'number'
			}
		}else if (vars.response_press_fghj ==='j'){
			if ('star' === vars.response_shape || vars.matching_rule1 != 'shape'){
			vars.matching_rule = 'shape'
			}else if ('green' === vars.response_color || vars.matching_rule1 != 'color'){
			vars.matching_rule = 'color'
			}else if (2 === vars.response_number || vars.matching_rule1 != 'number'){
			vars.matching_rule = 'number'
			}
		}
	}
	
	if (vars.matching_rule != 'empty'){
		vars.rule_update = 0
	}
	__end__
	set _prepare ""

define inline_javascript set_overlap
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.overlap1 = (vars.response_shape === 'circle') + (vars.response_color === 'blue') + (vars.response_number === 4)
	vars.overlap2 = (vars.response_shape === 'triangle') + (vars.response_color === 'red') + (vars.response_number === 1)
	vars.overlap3 = (vars.response_shape === 'cross') + (vars.response_color === 'yellow') + (vars.response_number === 3)
	vars.overlap4 = (vars.response_shape === 'star') + (vars.response_color === 'green') + (vars.response_number === 2)
	
	console.log('vars.overlap = ' + vars.overlap1 + ' ' + vars.overlap2 + ' ' + vars.overlap3 + ' ' + vars.overlap4)
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fix "[matching_rule] != 'empty'"
	run set_correct "[matching_rule] != 'empty'"
	run set_overlap always
	run set_correct_12 "[rule_update] == 1"
	run card_display always
	run press_fghj always
	run check_correct always
	run set_matching_rule12 "[rule_update] == 1"
	run update_matching_rule always
	run correct_feedback "[correct] == 1"
	run incorrect_feedback "[correct] == 0"
	run rule_update "[prompt_rule_update] == 1"
	run logger always

define inline_javascript update_matching_rule
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.correct === 1) {
	    vars.correct_in_a_row = vars.correct_in_a_row + 1
		vars.prompt_rule_update = 0
	}else{
	    vars.correct_in_a_row  = 0
		vars.prompt_rule_update = 0
	}
	
	if (vars.correct_in_a_row === 6) {
	    if (vars.sequence_correct === 0) {
			if (vars.matching_rule === 'shape') {
				vars.matching_rule1 = 'shape'
				vars.matching_rule = 'empty'
			} else if (vars.matching_rule === 'number') {
				vars.matching_rule1 = 'number'
				vars.matching_rule = 'empty'
			} else if (vars.matching_rule === 'color') {
				vars.matching_rule1 = 'color'
				vars.matching_rule = 'empty'
			}
			vars.correct_in_a_row = 0
			vars.sequence_correct = 1
			vars.prompt_rule_update = 1
			vars.rule_update = 1
		}else if (vars.sequence_correct === 1) {
			if (vars.matching_rule === 'shape') {
				vars.matching_rule2 = 'shape'
				if(vars.matching_rule1 === 'number'){
				vars.matching_rule = 'color'
				} else vars.matching_rule = 'number'
			} else if (vars.matching_rule === 'number') {
				vars.matching_rule2 = 'number'
				if(vars.matching_rule1 === 'shape') {
				vars.matching_rule = 'color'
				}else vars.matching_rule = 'shape'
			} else if (vars.matching_rule === 'color') {
				vars.matching_rule2 = 'color'
				if(vars.matching_rule1 === 'shape') {
				vars.matching_rule = 'number'
				}else vars.matching_rule = 'shape'
			}
			vars.correct_in_a_row = 0
			vars.sequence_correct = 2
			vars.prompt_rule_update = 1
		}else if (vars.sequence_correct === 2){
			if (vars.matching_rule === 'shape') {
				vars.matching_rule3 = 'shape'
			}else if (vars.matching_rule === 'color') {
				vars.matching_rule3 = 'color'
			}else if (vars.matching_rule === 'number') {
				vars.matching_rule3 = 'number'
			}
			vars.matching_rule = vars.matching_rule1
			vars.matching_rule4 = vars.matching_rule1
			vars.correct_in_a_row = 0
			vars.sequence_correct = 3
			vars.prompt_rule_update = 1
		}else if (vars.sequence_correct === 3){
			vars.matching_rule = vars.matching_rule2
			vars.matching_rule5 = vars.matching_rule2
			vars.correct_in_a_row = 0
			vars.sequence_correct = 4
			vars.prompt_rule_update = 1
		}else if (vars.sequence_correct === 4){
			vars.matching_rule = vars.matching_rule3
			vars.matching_rule6 = vars.matching_rule3
			vars.correct_in_a_row = 0
			vars.sequence_correct = 5
			vars.prompt_rule_update = 1
		}else if (vars.sequence_correct === 5){
			vars.correct_in_a_row = 0
			vars.sequence_correct = 6
		}
	}
			
			
	console.log('correct_in_a_row = ' + vars.correct_in_a_row)
	console.log('sequence_correct = ' + vars.sequence_correct)
	__end__
	set _prepare ""

define feedback verify_participant_ID
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="U heeft het volgende nummer ingevoerd: [participant_ID]<br /><br />Als dit klopt, druk dan op de spatiebalk om door te gaan.<br />Mocht u hier per ongeluk een verkeerd nummer hebben ingevoerd,<br />vraag dan om een nieuwe link." x=0 y=0 z_index=0

